# --- Water cube ---------------
s:Ge/Water/Type     = "TsBox"
s:Ge/Water/Parent   = "World"
s:Ge/Water/Material = "G4_WATER"
d:Ge/Water/HLX      = 5.0 cm
d:Ge/Water/HLY      = 5.0 cm
d:Ge/Water/HLZ      = 7.5 cm
d:Ge/Water/TransZ   = 7.5 cm     # move cube downstream so beam enters from +Z
b:Ge/Water/Invisible= "False"
s:Ge/Water/Color    = "white"

# --- Beam anchor ---------------
s:Ge/BeamPos/Type     = "TsBox"
s:Ge/BeamPos/Parent   = "World"
s:Ge/BeamPos/Material = "Vacuum"
d:Ge/BeamPos/HLX      = 1.0 mm
d:Ge/BeamPos/HLY      = 1.0 mm
d:Ge/BeamPos/HLZ      = 1.0 mm
d:Ge/BeamPos/TransZ   = 0.0 mm
b:Ge/BeamPos/Invisible= "True"

# --- Inner high-resolution scorer
s:Ge/WaterGrid/Type            = "TsBox"
s:Ge/WaterGrid/Parent          = "World"
b:Ge/WaterGrid/IsParallel      = "True"
s:Ge/WaterGrid/Material        = "G4_WATER"
d:Ge/WaterGrid/HLX             = 5.05 cm
d:Ge/WaterGrid/HLY             = 5.05 cm
d:Ge/WaterGrid/HLZ             = 7.5 cm
d:Ge/WaterGrid/TransZ          = 7.5 cm
b:Ge/WaterGrid/Invisible       = "False"
sc:Ge/WaterGrid/DrawingStyle   = "WireFrame"

# --- simple 3D viewer -----------
b:Ts/UseQt              = "True"
s:Gr/View/Type          = "OpenGL"
b:Gr/View/Active        = "True"
b:Gr/View/HiddenLineRemovalForTrajectories = "True"
b:Gr/View/IncludeAxes   = "True"  # defaults to "False"
s:Gr/View/AxesComponent = "World"  # Component in which to center the axes. Defaults to World.
d:Gr/View/AxesSize      = 0.2 m  # size of axes

# --- thin plane just upstream of water (records what enters water)
s:Ge/PSPlane/Type     = "TsBox"
s:Ge/PSPlane/Parent   = "World"
s:Ge/PSPlane/Material = "Vacuum"
d:Ge/PSPlane/HLX      = 6.0 cm
d:Ge/PSPlane/HLY      = 6.0 cm
d:Ge/PSPlane/HLZ      = 0.01 mm
d:Ge/PSPlane/TransZ   = -2 mm      # epsilon < 5.0 cm (water upstream face)
b:Ge/PSPlane/Invisible= "True"
