# --- Beam anchor ---------------
s:Ge/BeamPos/Type     = "Group"
s:Ge/BeamPos/Parent   = "World"
d:Ge/BeamPos/TransX   = 61.698605 mm
d:Ge/BeamPos/TransY   = 28.588427 mm
d:Ge/BeamPos/TransZ   = 151.416830 mm
d:Ge/BeamPos/RotX     = -90.0 deg
d:Ge/BeamPos/RotY     = 0.0 deg
d:Ge/BeamPos/RotZ     = 0.0 deg

# --- Photon beam -----------------------------------------------
# --- Spectrum from Valian linac: https://primoproject.net/energy-spectra-of-varian-linacs/
s:So/Beam/Type                       = "Beam"
s:So/Beam/Component                  = "BeamPos"  # emit along +Z of this component
s:So/Beam/BeamParticle               = "gamma"
s:So/Beam/BeamEnergySpectrumType     = "Continuous"
dv:So/Beam/BeamEnergySpectrumValues  = 46 0.0 0.1 0.25 0.50 0.75 1.00 1.25 1.50 1.75 2.00 2.25 2.50 2.75 3.00 3.25 3.50 3.75 4.00 4.25 4.50 4.75 5.00 5.25 5.50 5.75 6.00 6.25 6.50 6.75 7.00 7.25 7.50 7.75 8.00 8.25 8.50 8.75 9.00 9.25 9.50 9.75 10.00 10.25 10.50 10.75 11.0 MeV
uv:So/Beam/BeamEnergySpectrumWeights = 46 0.0 0.061 5.34 7.88 7.68 4.71 3.85 3.20 2.71 2.25 2.12 1.76 1.54 1.37 1.21 1.08 0.979 0.883 0.800 0.725 0.620 0.606 0.556 0.512 0.499 0.435 0.401 0.368 0.351 0.314 0.288 0.265 0.246 0.215 0.204 0.188 0.168 0.150 0.13 0.111 0.091 0.073 0.054 0.032 0.0085 0.0
s:So/Beam/BeamPositionDistribution   = "Flat"
d:So/Beam/BeamPositionSpreadX        = 8.5 cm
d:So/Beam/BeamPositionSpreadY        = 8.5 cm
s:So/Beam/BeamAngularDistribution    = "None"
i:So/Beam/NumberOfHistoriesInRun     = 100000     # increase for smoother stats
s:So/Beam/BeamPositionCutoffShape    = "Rectangle"
d:So/Beam/BeamPositionCutoffX        = 8.5 cm
d:So/Beam/BeamPositionCutoffY        = 8.5 cm
