# --- Material list ------------
sv:Ma/Wood/Components = 3 "Carbon" "Hydrogen" "Oxygen"
uv:Ma/Wood/Fractions = 3 0.5 0.06 0.44
d:Ma/Wood/Density = 0.70 g/cm3

sv:Ma/Foam/Components = 3 "Carbon" "Hydrogen" "Oxygen"
uv:Ma/Foam/Fractions  = 3 0.63 0.07 0.30
d:Ma/Foam/Density     = 0.05 g/cm3


# --- Scoring grid --
s:Ge/ScoringGrid/Type       = "TsBox"
s:Ge/ScoringGrid/Parent     = "World"
s:Ge/ScoringGrid/Material   = "Vacuum"
d:Ge/ScoringGrid/HLX        = 15.0 cm
d:Ge/ScoringGrid/HLY        = 15.0 cm
d:Ge/ScoringGrid/HLZ        = 7.5 cm
d:Ge/ScoringGrid/TransZ     = 7.5 cm
b:Ge/ScoringGrid/Invisible  = "False"
s:Ge/ScoringGrid/Color      = "white"

# --- Slab setup ---------------
s:Ge/Water/Type     = "TsBox"
s:Ge/Water/Parent   = "ScoringGrid"
s:Ge/Water/Material = "G4_WATER"
d:Ge/Water/HLX      = 15.0 cm
d:Ge/Water/HLY      = 15.0 cm
d:Ge/Water/HLZ      = 1.5 cm
d:Ge/Water/TransZ   = -6.0 cm
b:Ge/Water/Invisible= "False"
s:Ge/Water/Color    = "blue"

s:Ge/AirGap0/Type   = "TsBox"
s:Ge/AirGap0/Parent = "ScoringGrid"
s:Ge/AirGap0/Material = "Air"
d:Ge/AirGap0/HLX = 15.0 cm
d:Ge/AirGap0/HLY = 15.0 cm
d:Ge/AirGap0/HLZ = 0.5 cm
d:Ge/AirGap0/TransZ = -4.0 cm
s:Ge/AirGap0/Color = "white"

s:Ge/TestSlab1/Type   = "TsBox"
s:Ge/TestSlab1/Parent = "ScoringGrid"
s:Ge/TestSlab1/Material = "Wood"
d:Ge/TestSlab1/HLX = 15.0 cm
d:Ge/TestSlab1/HLY = 15.0 cm
d:Ge/TestSlab1/HLZ = 1.0 cm
d:Ge/TestSlab1/TransZ = -2.5 cm
s:Ge/TestSlab1/Color = "brown"

s:Ge/AirGap1/Type   = "TsBox"
s:Ge/AirGap1/Parent = "ScoringGrid"
s:Ge/AirGap1/Material = "Air"
d:Ge/AirGap1/HLX = 15.0 cm
d:Ge/AirGap1/HLY = 15.0 cm
d:Ge/AirGap1/HLZ = 0.5 cm
d:Ge/AirGap1/TransZ = -1 cm
s:Ge/AirGap1/Color = "white"

s:Ge/TestSlab2/Type   = "TsBox"
s:Ge/TestSlab2/Parent = "ScoringGrid"
s:Ge/TestSlab2/Material = "Foam"
d:Ge/TestSlab2/HLX = 15.0 cm
d:Ge/TestSlab2/HLY = 15.0 cm
d:Ge/TestSlab2/HLZ = 1.0 cm
d:Ge/TestSlab2/TransZ = .5 cm
s:Ge/TestSlab2/Color = "brown"

s:Ge/AirGap2/Type   = "TsBox"
s:Ge/AirGap2/Parent = "ScoringGrid"
s:Ge/AirGap2/Material = "Air"
d:Ge/AirGap2/HLX = 15.0 cm
d:Ge/AirGap2/HLY = 15.0 cm
d:Ge/AirGap2/HLZ = 0.5 cm
d:Ge/AirGap2/TransZ = 2 cm
s:Ge/AirGap2/Color = "white"

s:Ge/TestSlab3/Type   = "TsBox"
s:Ge/TestSlab3/Parent = "ScoringGrid"
s:Ge/TestSlab3/Material = "G4_BONE_COMPACT_ICRU"
d:Ge/TestSlab3/HLX = 15.0 cm
d:Ge/TestSlab3/HLY = 15.0 cm
d:Ge/TestSlab3/HLZ = 1.0 cm
d:Ge/TestSlab3/TransZ = 3.5 cm
s:Ge/TestSlab3/Color = "brown"

s:Ge/AirGap3/Type   = "TsBox"
s:Ge/AirGap3/Parent = "ScoringGrid"
s:Ge/AirGap3/Material = "Air"
d:Ge/AirGap3/HLX = 15.0 cm
d:Ge/AirGap3/HLY = 15.0 cm
d:Ge/AirGap3/HLZ = 0.5 cm
d:Ge/AirGap3/TransZ = 5 cm
s:Ge/AirGap3/Color = "white"


# --- Beam anchor ---------------
s:Ge/BeamPos/Type     = "TsBox"
s:Ge/BeamPos/Parent   = "World"
s:Ge/BeamPos/Material = "Vacuum"
d:Ge/BeamPos/HLX      = 1.0 mm
d:Ge/BeamPos/HLY      = 1.0 mm
d:Ge/BeamPos/HLZ      = 1.0 mm
d:Ge/BeamPos/TransZ   = -5.0 cm
b:Ge/BeamPos/Invisible= "False"
s:Ge/BeamPos/Color = "yellow"

