includeFile = /mnt/e/Christoph/applications/hec-dose-distribution/TOPAS_macros/motor_servo/scoring_dose.txt
# includeFile = /mnt/e/Christoph/applications/hec-dose-distribution/TOPAS_macros/motor_servo/scoring_phasespace.txt

# -- Current Scorer

# Current Electron X Fine
s:Sc/velCurrElX/Quantity = "velWeightedCurrent"
s:Sc/velCurrElX/Component = "ScoringGrid"
i:Sc/velCurrElX/XBins = Par/GridXBins
i:Sc/velCurrElX/YBins = Par/GridYBins
i:Sc/velCurrElX/ZBins = Par/GridZBins
b:Sc/velCurrElX/OutputToConsole = "False"
s:Sc/velCurrElX/OutputType = "DICOM"
s:Sc/velCurrElX/IfOutputFileAlreadyExists = "Overwrite"
sv:Sc/velCurrElX/OnlyIncludeParticlesNamed = 1 "e-"
sv:Sc/velCurrElX/Report = 3 "Sum" "Standard_Deviation" "Histories" 
b:Sc/velCurrElX/Active="True"
s:Sc/velCurrElX/direction = "x"

# Current Electron Y Fine
s:Sc/velCurrElY/Quantity = "velWeightedCurrent"
s:Sc/velCurrElY/Component = "ScoringGrid"
i:Sc/velCurrElY/XBins = Par/GridXBins
i:Sc/velCurrElY/YBins = Par/GridYBins
i:Sc/velCurrElY/ZBins = Par/GridZBins
b:Sc/velCurrElY/OutputToConsole = "False"
s:Sc/velCurrElY/OutputType = "DICOM"
s:Sc/velCurrElY/IfOutputFileAlreadyExists = "Overwrite"
sv:Sc/velCurrElY/OnlyIncludeParticlesNamed = 1 "e-"
sv:Sc/velCurrElY/Report = 3 "Sum" "Standard_Deviation" "Histories" 
b:Sc/velCurrElY/Active="True"
s:Sc/velCurrElY/direction = "y"

# Current Electron Z Fine
s:Sc/velCurrElZ/Quantity = "velWeightedCurrent"
s:Sc/velCurrElZ/Component = "ScoringGrid"
i:Sc/velCurrElZ/XBins = Par/GridXBins
i:Sc/velCurrElZ/YBins = Par/GridYBins
i:Sc/velCurrElZ/ZBins = Par/GridZBins
b:Sc/velCurrElZ/OutputToConsole = "False"
s:Sc/velCurrElZ/OutputType = "DICOM"
s:Sc/velCurrElZ/IfOutputFileAlreadyExists = "Overwrite"
sv:Sc/velCurrElZ/OnlyIncludeParticlesNamed = 1 "e-"
sv:Sc/velCurrElZ/Report = 3 "Sum" "Standard_Deviation" "Histories" 
b:Sc/velCurrElZ/Active="True"
s:Sc/velCurrElZ/direction = "z"
 
s:Sc/velCurrElX/OutputFile = "../../TOPAS_simulation_data/motor_servo/velCurrElX" 
s:Sc/velCurrElY/OutputFile = "../../TOPAS_simulation_data/motor_servo/velCurrElY" 
s:Sc/velCurrElZ/OutputFile = "../../TOPAS_simulation_data/motor_servo/velCurrElZ"

# Check Surface Scorer
# s:Sc/MySurfaceCheck/Quantity = "SurfaceCurrent"
# s:Sc/MySurfaceCheck/Component = "ScoringGrid"
# s:Sc/MySurfaceCheck/Surface = "ScoringGrid/ZPlusSurface"
# i:Sc/MySurfaceCheck/XBins = Par/GridXBins
# i:Sc/MySurfaceCheck/YBins = Par/GridYBins
# i:Sc/MySurfaceCheck/ZBins = Par/GridZBins
# sv:Sc/MySurfaceCheck/OnlyIncludeParticlesNamed = 1 "e-"
# sv:Sc/MySurfaceCheck/Report = 3 "Sum" "Standard_Deviation" "Histories" 
# s:Sc/MySurfaceCheck/OutputType = "CSV"
# s:Sc/MySurfaceCheck/IfOutputFileAlreadyExists = "Overwrite"
# s:Sc/MySurfaceCheck/OutputFile = "../../TOPAS_simulation_data/motor_servo/MySurfaceCheck" 
