# Shared bin parameters
i:Par/GlobalXBins = 21
i:Par/GlobalYBins = 21
i:Par/GlobalZBins = 50

i:Par/FineXBins = 21
i:Par/FineYBins = 21
i:Par/FineZBins = 100

# Dose on the mass-world grid
s:Sc/DoseScorerGlobal/Quantity                  = "DoseToWater"
s:Sc/DoseScorerGlobal/Component                 = "WaterGridGlobal"
s:Sc/DoseScorerGlobal/PropagateToChildren       = "True"
i:Sc/DoseScorerGlobal/XBins                     = Par/GlobalXBins
i:Sc/DoseScorerGlobal/YBins                     = Par/GlobalYBins
i:Sc/DoseScorerGlobal/ZBins                     = Par/GlobalZBins
b:Sc/DoseScorerGlobal/OutputToConsole           = "False"
s:Sc/DoseScorerGlobal/OutputType                = "csv"
s:Sc/DoseScorerGlobal/IfOutputFileAlreadyExists = "Overwrite"
sv:Sc/DoseScorerGlobal/Report                   = 3 "Sum" "Standard_Deviation" "Histories"
s:Sc/DoseScorerGlobal/OutputFile                = "../../TOPAS_simulation_data/pencil_beam/DoseGlobal" 

# Dose on the mass-world grid
s:Sc/DoseScorerFine/Quantity                  = "DoseToWater"
s:Sc/DoseScorerFine/Component                 = "WaterGridFine"
s:Sc/DoseScorerFine/PropagateToChildren       = "True"
i:Sc/DoseScorerFine/XBins                     = Par/GlobalXBins
i:Sc/DoseScorerFine/YBins                     = Par/GlobalYBins
i:Sc/DoseScorerFine/ZBins                     = Par/GlobalZBins
b:Sc/DoseScorerFine/OutputToConsole           = "False"
s:Sc/DoseScorerFine/OutputType                = "csv"
s:Sc/DoseScorerFine/IfOutputFileAlreadyExists = "Overwrite"
sv:Sc/DoseScorerFine/Report                   = 3 "Sum" "Standard_Deviation" "Histories"
s:Sc/DoseScorerFine/OutputFile                = "../../TOPAS_simulation_data/pencil_beam/DoseFine" 
