# Phase space scorer (ASCII is easy to inspect)
s:Sc/PS/Quantity        = "PhaseSpace"
s:Sc/PS/Surface         = "PSPlane/ZPlusSurface"
s:Sc/PS/OutputType      = "ASCII"
b:Sc/PS/IncludeRunID    = "True"
b:Sc/PS/IncludeEventID  = "True"
b:Sc/PS/IncludeTrackID  = "True"
s:Sc/PS/IfOutputFileAlreadyExists = "Overwrite"
s:Sc/PS/OutputFile = "../../TOPAS_simulation_data/pencil_beam/PS" 

# Filters: primaries only, gammas only, moving out of plane toward water
s:Sc/PS/OnlyIncludeParticlesOfGeneration = "Primary"
sv:Sc/PS/OnlyIncludeParticlesNamed       = 1 "gamma"
s:Sc/PS/OnlyIncludeParticlesGoing        = "Out"