# Phase space scorer (ASCII is easy to inspect)
s:Sc/PS/Quantity        = "PhaseSpace"
s:Sc/PS/Surface         = "PSPlane/ZPlusSurface"
s:Sc/PS/OutputType      = "ASCII"
b:Sc/PS/IncludeRunID    = "True"
b:Sc/PS/IncludeEventID  = "True"
b:Sc/PS/IncludeTrackID  = "True"
s:Sc/PS/IfOutputFileAlreadyExists = "Increment"
s:Sc/PS/OutputFile = "../../TOPAS_simulation_data/tumor_materials/PS"
b:Sc/PS/OutputAfterRun  = "True"

# Filters: primaries only, gammas only, moving out of plane toward water
s:Sc/PS/OnlyIncludeParticlesOfGeneration = "Primary"
sv:Sc/PS/OnlyIncludeParticlesNamed       = 1 "gamma"
s:Sc/PS/OnlyIncludeParticlesGoing        = "Out"