# --- multi-threading ------------
i:Ts/NumberOfThreads = -1

# --- Random seed ----------------
i:Ts/Seed = 1 # default is 1

includeFile = geometry_water.txt
includeFile = beam_6MV.txt
includeFile = scoring_current.txt

# --- World -----------------------
s:Ge/World/Material  = "Vacuum"
d:Ge/World/HLX       = 15.0 cm
d:Ge/World/HLY       = 15.0 m
d:Ge/World/HLZ       = 15.0 m
#b:Ge/World/Invisible = "True"

# --- Physics ---------------------
sv:Ph/Default/Modules = 1 "g4em-standard_opt0"   # simple EM for photons
sv:Ph/Default/LayeredMassGeometryWorlds = 1 "VirtualTumor"

# --- simple 3D viewer ------------
b:Ts/UseQt              = "True"
s:Gr/View/Type          = "OpenGL"
b:Gr/View/Active        = "False"
b:Gr/View/HiddenLineRemovalForTrajectories = "True"
b:Gr/View/IncludeAxes   = "True"  # defaults to "False"
s:Gr/View/AxesComponent = "World"  # Component in which to center the axes. Defaults to World.
d:Gr/View/AxesSize      = 0.2 m  # size of axes

d:Tf/TimelineStart              = 0. s
d:Tf/TimelineEnd                = 5. s
i:Tf/NumberOfSequentialTimes    = 5